<PlusConfiguration version="2.3" PlusRevision="Plus-2.8.0.5da5f485 - Win64">
  <DataCollection StartupDelaySec="1">
    <DeviceSet Name="fCal: Wisonic (C5-1 probe) + NDI Polaris tracker (Probe, Reference, Stylus) - fCal Phantom 2.0 - SRIL" Description="NDI Polaris with Wisonic Clover 60 C5-1 - modified: connect Polaris with network; replace US machine with frame grabber." />
    <Device
      Id="TrackerDevice"
      Type="PolarisTracker"
      NetworkHostname="192.168.56.5"
      NetworkPort="8765"
      LocalTimeOffsetSec="0.22142"
      ToolReferenceFrame="Tracker"
      CheckDSR="true">
      <DataSources>
        <DataSource Type="Tool" Id="Probe" RomFile="NdiToolDefinitions/ANI-C51.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700339
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34801403
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Admin
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6006
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Admin
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6006
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Admin
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6006
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              Admin
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6006
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              SRIL
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6001
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              SRIL
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6001
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              SRIL
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6001
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              SRIL
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6001
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              SRIL
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              ANI-C51
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3EDD6001
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Stylus" RomFile="NdiToolDefinitions/8700340.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              02000001
            </NdiIdentity>
            <PartNumber>
              8700340
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              34802401
            </SerialNumber>
          </CustomProperties>
        </DataSource>
        <DataSource Type="Tool" Id="Reference" RomFile="NdiToolDefinitions/8700449.rom" BufferSize="150">
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
          <CustomProperties>
            <Manufacturer>
              NDI
            </Manufacturer>
            <NdiIdentity>
              01000000
            </NdiIdentity>
            <PartNumber>
              8700449
            </PartNumber>
            <Revision>
              000
            </Revision>
            <SerialNumber>
              3532DC02
            </SerialNumber>
          </CustomProperties>
        </DataSource>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe" />
          <DataSource Id="Reference" />
          <DataSource Id="Stylus" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device Id="VideoDevice" Type="MmfVideo" FrameSize="1920 1080" VideoFormat="YUY2" CaptureDeviceId="0">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MF" ImageType="BRIGHTNESS" BufferSize="150" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE"
      EnableCapturing="FALSE"
      EnableFileCompression="FALSE"
      EnableCaptureOnStart="FALSE"
      RequestedFrameRate="15">
      <InputChannels>
        <InputChannel Id="VideoStream" />
      </InputChannels>
    </Device>
    <Device Id="TrackedVideoDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="VideoStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream" />
      </OutputChannels>
    </Device>
  </DataCollection>
  <CoordinateDefinitions>
    <Transform From="Image" To="Probe"
      Matrix="
        0.00598348	0.101503	0.0583886	107.547
        -0.010249	0.0583582	-0.101571	53.5467
        -0.117822	7.82973e-05	0.0118006	45.7982
        0	0	0	1"
       Error="0.338087" Date="011126_113235" />
    <Transform From="Image" To="TransducerOriginPixel"
      Matrix="
        1	0	0	-960
        0	1	0	5
        0	0	1	0
        0	0	0	1"
       Date="2025.12.30 15:31:00" />
    <Transform From="Phantom" To="Reference"
      Matrix="
        -0.242721	-0.970068	0.00736642	-40.6105
        0.969728	-0.242412	0.0294058	25.5373
        -0.0267399	0.0142808	0.99954	-136.835
        0	0	0	1"
       Error="0.315467" Date="123025_163249" />
    <Transform From="StylusTip" To="Stylus"
      Matrix="
        0.993411	0	-0.114608	-18.2874
        0.000656075	-0.999984	0.00568679	0.907411
        -0.114606	-0.00572451	-0.993395	-158.511
        0	0	0	1"
       Error="0.222755" Date="121225_150759" />
    <Transform From="TransducerOriginPixel" To="TransducerOrigin"
      Matrix="
        0.118418	0	0	0
        0	0.117083	0	0
        0	0	0.117751	0
        0	0	0	1"
       Date="011126_113235" />
  </CoordinateDefinitions>
  <Rendering WorldCoordinateFrame="Reference" DisplayedImageOrientation="MFA">
    <DisplayableObject Type="Model" ObjectCoordinateFrame="TransducerOrigin" Id="ProbeModel" File="Probe_L14-5_38.stl"
      ModelToObjectTransform="
        -1	0	0	29.7
        0	-1	0	1.5
        0	0	1	-14
        0	0	0	1" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="Reference" Id="Volume" />
    <DisplayableObject Type="Model" ObjectCoordinateFrame="StylusTip" Id="StylusModel" File="Stylus_Example.stl" />
    <DisplayableObject
      Id="PhantomModel"
      Type="Model"
      ObjectCoordinateFrame="Phantom"
      Opacity="0.6"
      File="fCal_2.0.stl"
      ModelToObjectTransform="
        1	0	0	-35
        0	1	0	-10
        0	0	1	-5
        0	0	0	1" />
    <DisplayableObject Type="Image" ObjectCoordinateFrame="Image" Id="LiveImage" />
  </Rendering>
  <Segmentation
    ApproximateSpacingMmPerPixel="0.119204"
    MorphologicalOpeningCircleRadiusMm="1.27"
    MorphologicalOpeningBarSizeMm="2.3"
    ClipRectangleOrigin="820 479"
    ClipRectangleSize="362 249"
    MaxLinePairDistanceErrorPercent="10"
    AngleToleranceDegrees="10"
    MaxAngleDifferenceDegrees="10"
    MinThetaDegrees="-70"
    MaxThetaDegrees="70"
    MaxLineShiftMm="10"
    ThresholdImagePercent="20"
    CollinearPointsMaxDistanceFromLineMm="0.6"
    UseOriginalImageIntensityForDotIntensityScore="0" />
  <PhantomDefinition>
    <Description Name="fCAL" Type="Multi-N" Version="2.0" WiringVersion="2.0" Institution="Queen&apos;s University PerkLab" />
    <Geometry>
      <Pattern Type="NWire">
        <Wire Name="7:G1_g1" EndPointFront="30.0 0.0 20.0" EndPointBack="30.0 40.0 20.0" />
        <Wire Name="8:L1_h1" EndPointFront="55.0 0.0 20.0" EndPointBack="35.0 40.0 20.0" />
        <Wire Name="9:M1_m1" EndPointFront="60.0 0.0 20.0" EndPointBack="60.0 40.0 20.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="4:G3_g3" EndPointFront="30.0 0.0 10.0" EndPointBack="30.0 40.0 10.0" />
        <Wire Name="5:H3_l3" EndPointFront="35.0 0.0 10.0" EndPointBack="55.0 40.0 10.0" />
        <Wire Name="6:M3_m3" EndPointFront="60.0 0.0 10.0" EndPointBack="60.0 40.0 10.0" />
      </Pattern>
      <Pattern Type="NWire">
        <Wire Name="1:H5_h5" EndPointFront="35.0 0.0 0.0" EndPointBack="35.0 40.0 0.0" />
        <Wire Name="2:L5_i5" EndPointFront="55.0 0.0 0.0" EndPointBack="40.0 40.0 0.0" />
        <Wire Name="3:M5_m5" EndPointFront="60.0 0.0 0.0" EndPointBack="60.0 40.0 0.0" />
      </Pattern>
      <Landmarks>
        <Landmark Name="#1" Position="104.3 5.0 20.0" />
        <Landmark Name="#2" Position="104.3 45.0 20.0" />
        <Landmark Name="#3" Position="104.3 45.0 0.0" />
        <Landmark Name="#4" Position="104.3 -5.0 0.0" />
        <Landmark Name="#5" Position="-34.3 45.0 15.0" />
        <Landmark Name="#6" Position="-34.3 -5.0 20.0" />
        <Landmark Name="#7" Position="-34.3 -5.0 0.0" />
        <Landmark Name="#8" Position="-34.3 45.0 0.0" />
      </Landmarks>
    </Geometry>
  </PhantomDefinition>
  <VolumeReconstruction
    OutputSpacing="0.5 0.5 0.5"
    ClipRectangleOrigin="0 0"
    ClipRectangleSize="820 616"
    Interpolation="LINEAR"
    Optimization="FULL"
    CompoundingMode="MEAN"
    FillHoles="OFF" />
  <fCal
    PhantomModelId="PhantomModel"
    ReconstructedVolumeId="Volume"
    TransducerModelId="ProbeModel"
    StylusModelId="StylusModel"
    ImageDisplayableObjectId="LiveImage"
    NumberOfCalibrationImagesToAcquire="200"
    NumberOfValidationImagesToAcquire="100"
    NumberOfStylusCalibrationPointsToAcquire="200"
    RecordingIntervalMs="100"
    MaxTimeSpentWithProcessingMs="70"
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    ReferenceCoordinateFrame="Reference"
    TransducerOriginCoordinateFrame="TransducerOrigin"
    TransducerOriginPixelCoordinateFrame="TransducerOriginPixel"
    TemporalCalibrationDurationSec="10"
    FixedChannelId="VideoStream"
    FixedSourceId="Video"
    MovingChannelId="TrackerStream"
    MovingSourceId="ProbeToTracker"
    DefaultSelectedChannelId="TrackedVideoStream" />
  <vtkPlusPivotCalibrationAlgo ObjectMarkerCoordinateFrame="Stylus" ReferenceCoordinateFrame="Reference" ObjectPivotPointCoordinateFrame="StylusTip" />
  <vtkPlusPhantomLandmarkRegistrationAlgo PhantomCoordinateFrame="Phantom" ReferenceCoordinateFrame="Reference" StylusTipCoordinateFrame="StylusTip" />
  <vtkPlusProbeCalibrationAlgo
    ImageCoordinateFrame="Image"
    ProbeCoordinateFrame="Probe"
    PhantomCoordinateFrame="Phantom"
    ReferenceCoordinateFrame="Reference"
    OptimizationMethod="2D"
    IsotropicPixelSpacing="False" />
  <vtkPlusTemporalCalibrationAlgo ClipRectangleOrigin="820 479" ClipRectangleSize="362 249" />
</PlusConfiguration>
